PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine word_presentation_
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    TextComponent word_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Word
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  Routine RecallPhase
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = "Please type as many words as you can remember. Press ENTER when done."
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    TextboxComponent RecallInput
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = "Please type as many words as you can remember. Press ENTER when done."
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    KeyboardComponent endRecall
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = "Thank you for participating! Press SPACE to exit."
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator wordLoop loopType="TrialHandler"
    conditionsFile = word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'Apple'},
      {'Word': 'River'},
      {'Word': 'Chair'},
      {'Word': 'Cloud'},
      {'Word': 'Window'},
      {'Word': 'Banana'},
      {'Word': 'Garden'},
      {'Word': 'Ocean'},
      {'Word': 'Bottle'},
      {'Word': 'Pencil'}]
    Routine word_presentation_
  LoopTerminator wordLoop
  Routine RecallPhase
  Routine EndScreen
